PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = ContPsyTracking
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine calibration
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    MouseComponent mouse_2
      correctAns = polygon_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      storeCorrect = True
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    PolygonComponent polygon_2
      fillColor = white
      pos = (1, 1)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = cm
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  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 120
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      timeRelativeTo = experiment
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    PolygonComponent polygon
      contrast = 0
      fillColor = white
      opacity [set every repeat] = opacity
      pos [set every frame] = pos
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = cm
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import numpy
        import time
      Begin Experiment:
        #randomize which opacity we start with
        a = [0.03,1]
        opacity = numpy.random.choice(a)
      Begin Routine:
        #set the initial position of the dot in the beginning
        #of each run
        posx = 0
        posy = 0
        pos = (posx, posy)

        #Save the time in the beginning of each condition
        #so we know how long it's been running
        start = time.time()
      Each Frame:
        if time.time() - start > 3: #start moving the dot only after 3 seconds

            #draw the next step for the random walk for x and y directions
            Addx = numpy.random.normal(loc=0,scale = 0.3)
            Addy = numpy.random.normal(loc=0,scale = 0.3)

            #add the next step to the current position,
            #but make sure we don't go off screen (set at +- 6cm from middle of screen)
            if posx + Addx < 6 and posx + Addx > -6:
                posx = posx + Addx

            if posy + Addy < 6 and posy + Addy > -6:
                posy = posy + Addy

            pos = (posx, posy)

            print(opacity)

            #save the relevant data on each frame
            thisExp.addData("time_in_run", time.time() - start)
            thisExp.addData("x_coord_mouse", mouse.getPos()[0])
            thisExp.addData("y_coord_mouse", mouse.getPos()[1])
            thisExp.addData("x_coord_target", posx)
            thisExp.addData("y_coord_target", posy)
            thisExp.addData("opacity", opacity)
            thisExp.nextEntry()
      End Routine:
        #change opacity from the one we ran first to the other one
        if opacity == 0.03:
            opacity = 1
        else:
            opacity = 0.03
Flow
  Routine calibration
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine trial
  LoopTerminator trials
